PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = FaceOddball
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent image_trial
      image [set every repeat] = $f"img/{img}"
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_trial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine intro
    TextComponent text_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome!
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  Routine block_init
    TextComponent text_block_init
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"""
        This is block number {block}

        [Press space to continue]
        """
    KeyboardComponent key_resp_block_init
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_end
    TextComponent text_block_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"""
        This is the end of block number {block}

        [Press space to continue]
        """
    KeyboardComponent key_resp_block_end
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix
    PolygonComponent fixation_cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent text_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine end
    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thank you for participating!
Flow
  Routine intro
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = lists/blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Block': 1},
      {'Block': 2},
      {'Block': 3}]
    Routine block_init
    Routine fix
    LoopInitiator trials loopType="TrialHandler"
      conditions = []
      conditionsFile = lists/trials.xlsx
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator trials
    Routine block_end
  LoopTerminator blocks
  Routine end
